PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = DecodingEmotions
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Routines
  Routine Distraction
  Routine Retrival
  Routine Training
    TextComponent text
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $texten
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    ImageComponent image
      image [set every repeat] = $bilden
      size = (0.5, 0.5)
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 2.5
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    ImageComponent image2
      image [set every repeat] = $bilden
      size = (0.5, 0.5)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 2.5
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    TextComponent text2
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 8
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $texten
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Flow
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = $number_of_runs
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    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = $learning_batch_size
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      Routine Training
    LoopTerminator trials
    Routine Distraction
    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = random
      nReps = $batch_learn_size
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      Routine Retrival
    LoopTerminator trials_2
  LoopTerminator trials_3
